#  Example Qudi configuration file.
#
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray', 'tasklogic']

    module_server:
        address: 'localhost'
        port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:

    timetagger_fast_counter:
        module.Class: 'swabian_instruments.timetagger_fast_counter.TimeTaggerFastCounter'
        timetagger_channel_apd_0: 8
        timetagger_channel_apd_1: 7
        timetagger_channel_detect: 1
        timetagger_channel_sequence: 2
        timetagger_sum_channels: False


    pulsestreamer:
        module.Class: 'swabian_instruments.pulse_streamer.PulseStreamer' # 'swabian_instruments.pulse_streamer_jrpc.PulseStreamer'
        pulsestreamer_ip: '10.54.10.64' #'169.254.8.2/16'
        laser_channel: 0
        uw_x_channel: 2
        pulsed_file_dir: 'C:\Users\coherent_lab\saved_pulsed_assets'

    DLnsec:
        module.Class: 'laser.DLnsec_laser.DLnsec'
        com_port: 'COM3' # 'ASRL3::INSTR'

    PI_scanner:
        module.Class: 'confocal_scanner_PI_E-727.ConfocalScannerPI_E727'
        E727_USBserial: '0119019672'

    timetagger_counter:
        module.Class: 'timetagger_counter.TimeTaggerCounter'
        timetagger_channel_apd_0: 8
        # timetagger_channel_apd_1: 7
        timetagger_sum_channels: False

    microwave_windfreak:
        module.Class: 'microwave.mw_source_windfreak_synthhdpro.MicrowaveSynthHDPro'
        serial_port: 'ASRL4::INSTR'
        serial_timeout: 10
        output_channel: 0








    simpledatadummy:
        module.Class: 'simple_data_dummy.SimpleDummy'

    microwave_dummy:
        module.Class: 'microwave.mw_source_dummy.MicrowaveDummy'
        gpib_address: 'dummy'
        gpib_timeout: 20

    mydummyscanner:
        module.Class: 'confocal_scanner_dummy.ConfocalScannerDummy'
        clock_frequency: 100
        connect:
            fitlogic: 'fitlogic'

    mydummycounter:
        module.Class: 'slow_counter_dummy.SlowCounterDummy'
        source_channels: 4
        clock_frequency: 100
        count_distribution: 'dark_bright_poisson'
        remoteaccess: True

    mydummyodmrcounter:
        module.Class: 'odmr_counter_dummy.ODMRCounterDummy'
        clock_frequency: 100
        number_of_channels: 3
        connect:
            fitlogic: 'fitlogic'

    mydummyfastcounter:
        module.Class: 'fast_counter_dummy.FastCounterDummy'
        #choose_trace: True
        #gated: False

    mydummypulser:
        module.Class: 'pulser_dummy.PulserDummy'

    mydummywavemeter:
        module.Class: 'wavemeter_dummy.WavemeterDummy'
        measurement_timing: 10

    mydummyswitch1:
        module.Class: 'switches.switch_dummy.SwitchDummy'

    mydummyswitch2:
        module.Class: 'switches.switch_dummy.SwitchDummy'

    myspectrometer:
        module.Class: 'spectrometer.spectrometer_dummy.SpectrometerInterfaceDummy'
        connect:
            fitlogic: 'fitlogic'

    motordummy:
        module.Class: 'motor.motor_dummy.MotorDummy'

    magnetdummy:
        module.Class: 'magnet.magnet_dummy.MagnetDummy'

    processdummy:
        module.Class: 'process_dummy.ProcessDummy'

    laserdummy:
        module.Class: 'laser.simple_laser_dummy.SimpleLaserDummy'


logic:

#     swabian_interfuse:
#         module.Class: 'interfuse.Swabian_interfuse.Swabian_Interfuse'
#         clock_frequency: 167e6
#         connect:

    swabian_odmr_counter_interfuse:
        module.Class: 'interfuse.swabian_odmr_counter_interfuse.SwabianODMRCounterInterfuse'
        clock_frequency: 100
        switch_channel: 2
        connect:
            fast_counter: 'timetagger_fast_counter'
            pulser: 'pulsestreamer'
            laser: 'DLnsec'

    confocalscanner_pi_swabian_interfuse:
        module.Class: 'interfuse.confocal_scanner_PI_Swabian_interfuse.ConfocalScanner_PI_Swabian_Interfuse'
        clock_frequency: 100
        connect:
            PI_E727_controller: 'PI_scanner'
            timetagger_counter: 'timetagger_counter'
            pulsestreamer: 'pulsestreamer'
            laser: 'DLnsec'
            fitlogic: 'fitlogic'

    confocalscanner_pi_swabian_fastcounter_interfuse:
        module.Class: 'interfuse.confocal_scanner_PI_Swabian_fastcounter_interfuse.ConfocalScanner_PI_Swabian_Interfuse'
        clock_frequency: 100
        connect:
            PI_E727_controller: 'PI_scanner'
            timetagger_fast_counter: 'timetagger_fast_counter'
            fitlogic: 'fitlogic'

    counterlogic:
        module.Class: 'counter_logic.CounterLogic'
        connect:
            counter1: 'timetagger_counter' # 'mydummycounter'
            savelogic: 'savelogic'

    gatedcounterlogic:
        module.Class: 'counter_logic.CounterLogic'
        connect:
            counter1: 'mydummycounter'
            savelogic: 'savelogic'

    scannerlogic:
        module.Class: 'confocal_logic.ConfocalLogic'
        connect:
            confocalscanner1: 'scanner_tilt_interfuse'
            savelogic: 'savelogic'

    laserscannerlogic:
        module.Class: 'laser_scanner_logic.LaserScannerLogic'
        connect:
            confocalscanner1: 'scanner_tilt_interfuse'
            savelogic: 'savelogic'

    fitlogic:
        module.Class: 'fit_logic.FitLogic'

    optimizerlogic:
        module.Class: 'optimizer_logic.OptimizerLogic'
        connect:
            confocalscanner1: 'scanner_tilt_interfuse'
            fitlogic: 'fitlogic'

    scanner_tilt_interfuse:
        module.Class: 'interfuse.scanner_tilt_interfuse.ScannerTiltInterfuse'
        connect:
            confocalscanner1: 'confocalscanner_pi_swabian_interfuse' # 'confocalscanner_pi_swabian_fastcounter_interfuse'

    pulsedmasterlogic:
        module.Class: 'pulsed.pulsed_master_logic.PulsedMasterLogic'
        connect:
            pulsedmeasurementlogic: 'pulsedmeasurementlogic'
            sequencegeneratorlogic: 'sequencegeneratorlogic'

    sequencegeneratorlogic:
        module.Class: 'pulsed.sequence_generator_logic.SequenceGeneratorLogic'
        #assets_storage_path: 'C:/Users/<username>/saved_pulsed_assets'
        #additional_predefined_methods_path: 'C:\\Custom_dir'  # optional, can also be lists on several folders
        #additional_sampling_functions_path: 'C:\\Custom_dir'  # optional, can also be lists on several folders
        #overhead_bytes: 4294967296  # Not properly implemented yet
        connect:
            pulsegenerator: 'pulsestreamer'

    pulsedmeasurementlogic:
        module.Class: 'pulsed.pulsed_measurement_logic.PulsedMeasurementLogic'
        raw_data_save_type: 'text'  # optional
        #additional_extraction_path: 'C:\\Custom_dir\\Methods'  # optional
        #additional_analysis_path: 'C:\\Custom_dir\\Methods'  # optional
        connect:
            fastcounter: 'timetagger_fast_counter'
            pulsegenerator: 'pulsestreamer'
            fitlogic: 'fitlogic'
            savelogic: 'savelogic'
            microwave: 'microwave_dummy'






    odmrlogic:
        module.Class: 'odmr_logic.ODMRLogic'
        scanmode: 'SWEEP'
        connect:
            odmrcounter: 'swabian_odmr_counter_interfuse' # mydummyodmrcounter # swabian_odmr_counter_interfuse
            fitlogic: 'fitlogic'
            microwave1: 'microwave_windfreak' # microwave_dummy # microwave_windfreak
            savelogic: 'savelogic'
            taskrunner: 'tasklogic'


# ==================================================================================
    # this interfuse enables odmr if hardware trigger is not available or if
    # the counter has only two channels:
    odmr_counter_microwave_TT_WF_interfuse:
        module.Class: 'interfuse.odmr_counter_microwave_interfuse.ODMRCounterMicrowaveInterfuse'
        connect:
            slowcounter: 'timetagger_counter'
            microwave: 'microwave_windfreak'

    odmr_counter_microwave_interfuse:
        module.Class: 'interfuse.odmr_counter_microwave_interfuse.ODMRCounterMicrowaveInterfuse'
        connect:
            slowcounter: 'mydummycounter'
            microwave: 'microwave_dummy'

    # this other logic runs now with the interfuse
    odmrlogic2:
        module.Class: 'odmr_logic.ODMRLogic'
        connect:
            odmrcounter: 'odmr_counter_microwave_TT_WF_interfuse'
            fitlogic: 'fitlogic'
            microwave1: 'odmr_counter_microwave_TT_WF_interfuse'
            savelogic: 'savelogic'
            taskrunner: 'tasklogic'
        scanmode: 'LIST'
# ==================================================================================

#    #Building Timetagger ODMR funtionality using Timetagger fastcounter module.
#    timetagger_fastcounter_odmr_counter_interfuse:
#        module.Class: 'interfuse.timetagger_odmr_counter_interfuse.TimeTaggerODMRCounterInterfuse'
#        clock_frequency: 100
#        # number_of_channels: 3
#        connect:
#            fast_counter: 'timetagger_fast_counter'
#            # odmrcounter: 'mydummyodmrcounter'
#            # fitlogic: 'fitlogic'


    tasklogic:
        module.Class: 'taskrunner.TaskRunner'
        tasks:
        #    dummytask:
        #        module: 'dummy'
        #        preposttasks: ['ppdummy']
        #    dummyinterruptor:
        #        module: 'dummy'
        #        pausetasks: ['dummytask']
        #        preposttasks: ['ppdummy2']
        #    ppdummy:
        #        module: 'prepostdummy'
        #    ppdummy2:
        #        module: 'prepostdummy'
            scannerLocationRefocus:
                module: 'refocus'
        #        preposttasks: ['fliplasermirror']
                pausetasks: ['scan', 'odmr']
                needsmodules:
                    optimizer: 'optimizerlogic'
        #        config:
        #            initial: [1, 1, 1]
        #    fliplasermirror:
        #        module: 'flipmirror'
        #        needsmodules:
        #            switchlogic: 'switch'
        #        config:
        #            sequence: [('mydummyswitch1', 1, True), ('mydummyswitch1', 2, True), ('mydummyswitch2', 1, True)]


    T1_logic:
        module.Class: 'T1_logic.T1Logic'
        connect:
            laser: 'DLnsec'
            fastcounter: 'timetagger_fast_counter'
            pulser: 'pulsestreamer'
            # mw_generator: 'microwave_windfreak'
            fitlogic: 'fitlogic'
            savelogic: 'savelogic'


    population_calibration_logic:
        module.Class: 'population_calibration_logic.PopulationCalibrationLogic'
        connect:
            laser: 'DLnsec'
            fastcounter: 'timetagger_fast_counter'
            slowcounter: 'timetagger_counter'
            pulser: 'pulsestreamer'
            scanner: 'confocalscanner_pi_swabian_interfuse'
            # mw_generator: 'microwave_windfreak'
            fitlogic: 'fitlogic'
            savelogic: 'savelogic'
            optimizerlogic: 'optimizerlogic'


















    simpledatalogic:
        module.Class: 'simple_data_logic.SimpleDataLogic'
        connect:
            simpledata: 'simpledatadummy'

    softpid:
        module.Class: 'software_pid_controller.SoftPIDController'
        connect:
            process: 'processdummy'
            control: 'processdummy'

    pidlogic:
        module.Class: 'pid_logic.PIDLogic'
        connect:
            controller: 'softpid'
            savelogic: 'savelogic'

    kernellogic:
        module.Class: 'jupyterkernel.kernellogic.QudiKernelLogic'
        remoteaccess: True


    wavemeterloggerlogic:
        module.Class: 'wavemeter_logger_logic.WavemeterLoggerLogic'
        logic_acquisition_timing: 20
        logic_update_timing: 100
        connect:
            wavemeter1: 'mydummywavemeter'
            savelogic: 'savelogic'
            counterlogic: 'counterlogic'
            fitlogic: 'fitlogic'

    switchlogic:
        module.Class: 'switch_logic.SwitchLogic'
        connect:
            switch1: 'mydummyswitch1'
            switch2: 'mydummyswitch2'


    poimanagerlogic:
        module.Class: 'poi_manager_logic.PoiManagerLogic'
        connect:
            scannerlogic: 'scannerlogic'
            optimizer1: 'optimizerlogic'
            savelogic: 'savelogic'


    automationlogic:
        module.Class: 'automation.AutomationLogic'
        connect:
            taskrunner: 'tasklogic'

    savelogic:
        module.Class: 'save_logic.SaveLogic'
        win_data_directory: 'C:/Data'   # DO NOT CHANGE THE DIRECTORY HERE! ONLY IN THE CUSTOM FILE!
        unix_data_directory: 'Data/'
        log_into_daily_directory: True

    spectrumlogic:
        module.Class: 'spectrum.SpectrumLogic'
        connect:
            spectrometer: 'myspectrometer'
            savelogic: 'savelogic'
            odmrlogic1: 'odmrlogic'

    magnet_logic:
        module.Class: 'magnet_logic.MagnetLogic'
        connect:
            magnetstage: 'magnetdummy'
            optimizerlogic: 'optimizerlogic'
            counterlogic: 'counterlogic'
            odmrlogic: 'odmrlogic'
            savelogic: 'savelogic'
            scannerlogic: 'scannerlogic'
            traceanalysis: 'trace_analysis_logic'
            gatedcounterlogic: 'gatedcounterlogic'
            sequencegeneratorlogic: 'sequencegeneratorlogic'

    magnet_motor_interfuse:
        module.Class: 'interfuse.magnet_motor_interfuse.MagnetMotorInterfuse'
        connect:
            motorstage: 'motordummy'

    trace_analysis_logic:
        module.Class: 'trace_analysis_logic.TraceAnalysisLogic'
        connect:
            counterlogic1: 'gatedcounterlogic'
            savelogic: 'savelogic'
            fitlogic: 'fitlogic'

    qdplotlogic:
        module.Class: 'qdplot_logic.QdplotLogic'
        connect:
            savelogic: 'savelogic'

    nuopslogic:
        module.Class: 'nuclear_operations_logic.NuclearOperationsLogic'
        connect:
            sequencegenerationlogic: 'sequencegeneratorlogic'
            traceanalysislogic: 'trace_analysis_logic'
            gatedcounterlogic: 'gatedcounterlogic'
            odmrlogic: 'odmrlogic'
            optimizerlogic: 'optimizerlogic'
            scannerlogic: 'scannerlogic'
            savelogic: 'savelogic'

    laserlogic:
        module.Class: 'laser_logic.LaserLogic'
        connect:
            laser: 'laserdummy'

gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'

    counter:
        module.Class: 'counter.countergui.CounterGui'
        connect:
            counterlogic1: 'counterlogic'

    confocal:
        module.Class: 'confocal.confocalgui.ConfocalGui'
        connect:
            confocallogic1: 'scannerlogic'
            savelogic: 'savelogic'
            optimizerlogic1: 'optimizerlogic'
        fixed_aspect_ratio_xy: True
        fixed_aspect_ratio_depth: True
        slider_stepsize: 0.001  # in micrometer
        image_x_padding: 0.02
        image_y_padding: 0.02
        image_z_padding: 0.02

    poimanager:
        module.Class: 'poimanager.poimangui.PoiManagerGui'
        connect:
            poimanagerlogic1: 'poimanagerlogic'
            confocallogic1: 'scannerlogic'

    odmr:
        module.Class: 'odmr.odmrgui.ODMRGui'
        connect:
            odmrlogic1: 'odmrlogic'
            savelogic: 'savelogic'

    wavemeterlogger:
        module.Class: 'wavemeterlogger.wavemeterloggui.WavemeterLogGui'
        connect:
            wavemeterloggerlogic1: 'wavemeterloggerlogic'
            savelogic: 'savelogic'

    switches:
        module.Class: 'switcher.switchgui.SwitchGui'
        connect:
            switchlogic: 'switchlogic'

    taskrunner:
        module.Class: 'taskrunner.taskgui.TaskGui'
        connect:
            tasklogic: 'tasklogic'

    automation:
        module.Class: 'automation.automationgui.AutomationGui'
        connect:
            automationlogic: 'automationlogic'

    spectrometer:
        module.Class: 'spectrometer.spectrometergui.SpectrometerGui'
        connect:
            spectrumlogic1: 'spectrumlogic'

    pulsedmeasurement:
        module.Class: 'pulsed.pulsed_maingui.PulsedMeasurementGui'
        connect:
            pulsedmasterlogic: 'pulsedmasterlogic'
#             savelogic: 'savelogic'

    simpledata:
        module.Class: 'simpledatagui.simpledatagui.SimpleDataGui'
        connect:
            simplelogic: 'simpledatalogic'

    magnet:
        module.Class: 'magnet.magnet_gui.MagnetGui'
        connect:
            magnetlogic1: 'magnet_logic'
            savelogic: 'savelogic'

    gatedcounter:
        module.Class: 'gated_counter.gated_counter_gui.GatedCounterGui'
        connect:
            gatedcounterlogic1: 'gatedcounterlogic'
            traceanalysislogic1: 'trace_analysis_logic'

    pidcontrol:
        module.Class: 'pidgui.pidgui.PIDGui'
        connect:
            pidlogic: 'pidlogic'

    errortest:
        module.Class: 'testgui.TestGui'
        text: 'Random text from config'
        error: 'This config is required!'

    qdplotter:
        module.Class: 'qdplotter.qdplottergui.QdplotterGui'
        connect:
            qdplotlogic1: 'qdplotlogic'

    nuclearops:
        module.Class: 'nuclear_operations.nuclear_operations.NuclearOperationsGui'
        connect:
            nuclearoperationslogic: 'nuopslogic'
            savelogic: 'savelogic'

    laser:
        module.Class: 'laser.laser.LaserGUI'
        connect:
            laserlogic: 'laserlogic'

    laserscanner:
        module.Class: 'laserscanner.laserscannergui.VoltScanGui'
        connect:
            voltagescannerlogic1: 'laserscannerlogic'
            savelogic: 'savelogic'

    # Gui to test the dummy counting
    odmrgui_program_trigger:
        module.Class: 'odmr.odmrgui.ODMRGui'
        connect:
            odmrlogic1: 'odmrlogic2'
            savelogic: 'savelogic'
